PsychoPy2experiment version="3.1.5"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = FingerTapping2
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Routines
  Routine InstrL
    TextComponent iLt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        When the screen shows: "Get ready!"

        Place your LEFT index finger on the LEFT GREEN KEY


        When the screen shows: "Start pressing!"

        press the LEFT GREEN KEY AS FAST AS POSSIBLE

        with your LEFT INDEX FINGER.
    TextComponent iLc
      color = Chartreuse
      letterHeight = 0.1
      startVal [time (s)] = 5
      wrapWidth = 40
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      text:





        << press the LEFT GREEN KEY to continue >>
    KeyboardComponent iLk
      allowedKeys = 'lshift'
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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  Routine InstrR
    TextComponent iRt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        When the screen shows: "Get ready!"

        Place your RIGHT index finger on the RIGHT GREEN KEY


        When the screen shows: "Start pressing!"

        press the RIGHT GREEN KEY AS FAST AS POSSIBLE

        with your RIGHT INDEX FINGER.
    TextComponent iRc
      color = Chartreuse
      letterHeight = 0.1
      startVal [time (s)] = 5
      wrapWidth = 40
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      text:





        << press the RIGHT GREEN KEY to continue >>
    KeyboardComponent iRk
      allowedKeys = 'rshift'
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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  Routine InstrB
    TextComponent iBt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        When the screen shows: "Get ready!"

        Place your LEFT finger on the LEFT GREEN KEY.
        Place your RIGHT finger on the RIGHT GREEN KEY.


        When the screen shows: "Start pressing!"

        Press AS FAST AS POSSIBLE
        with BOTH LEFT AND RIGHT INDEX FINGERS SIMULTANEOUSLY.


        Press both fingers at the same time (synchronously).
    TextComponent iBc
      color = Chartreuse
      letterHeight = 0.1
      startVal [time (s)] = 5
      wrapWidth = 40
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      text:
        << press any GREEN KEY to continue >>
    KeyboardComponent iBk
      allowedKeys = 'lshift','rshift'
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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  Routine Ready
    TextComponent rT1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Get ready!
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    TextComponent rT2
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
      text = Start pressing!
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    KeyboardComponent tK
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
      store = nothing
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  Routine Right
    KeyboardComponent Rk
      allowedKeys = 'rshift'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = all keys
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    TextComponent Rt
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Press

        AS FAST POSSIBLE

        with your

        RIGHT INDEX FINGER
  Routine Both
    KeyboardComponent Bk
      allowedKeys = 'lshift','rshift'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = all keys
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    TextComponent Bt
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Press AS FAST POSSIBLE

        and

        SIMULTANEOUSLY

        with

        BOTH INDEX FINGERS
  Routine Left
    KeyboardComponent Lk
      allowedKeys = 'lshift'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = all keys
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    TextComponent Lt
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Press

        AS FAST POSSIBLE

        with your

        LEFT INDEX FINGER
  Routine i01
    TextComponent i01_t
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        In this test we will be measuring how fast you can press with

        your LEFT index finger, your RIGHT index finger,

        BOTH index fingers simultaneously, and

        BOTH index fingers alternating.


        << press any GREEN KEY to continue >>
    KeyboardComponent i01_k
      allowedKeys = 'lshift','rshift'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine i02
    TextComponent i02_t
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        Next up are four videos

        demonstrating LEFT index finger pressing,

        RIGHT index finger pressing,

        DUAL index finger pressing,

        and ALTERNATING left and right finger pressing.


        << press any GREEN KEY to continue >>
    KeyboardComponent i02_k
      allowedKeys = 'lshift','rshift'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine i03
    TextComponent i03_tL
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = LEFT INDEX FINGER PRESSING:
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    MovieComponent i03_vL
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = ./Videos/LeftTapping.mpg
      size = (960, 540)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9
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    TextComponent i03_tR
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 3
      text = RIGHT INDEX FINGER PRESSING:
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    MovieComponent i03_vR
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = ./Videos/RightTapping.mpg
      size = (960, 540)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 9
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    TextComponent i03_tD
      letterHeight = 0.1
      startVal [time (s)] = 24
      stopVal [duration (s)] = 3
      text = DUAL INDEX FINGER PRESSING:
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    MovieComponent i03_vD
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = ./Videos/DualTapping.mpg
      size = (960, 540)
      startVal [time (s)] = 27
      stopVal [duration (s)] = 9
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    TextComponent i03_tA
      letterHeight = 0.1
      startVal [time (s)] = 36
      stopVal [duration (s)] = 3
      text = ALTERNATING (LEFT - RIGHT) FINGER PRESSING:
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    MovieComponent i03_vA
      backend = moviepy
      forceEndRoutine = False
      movie = ./Videos/Alternating.mpg
      size = (960, 540)
      startVal [time (s)] = 39
      stopVal [duration (s)] = 9
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    TextComponent i03_t
      letterHeight = 0.1
      startVal [time (s)] = 48
      wrapWidth = 40
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      text:
        << press any GREEN KEY to continue >>
    KeyboardComponent i03_k
      allowedKeys = 'lshift','rshift'
      forceEndRoutine = True
      startVal [time (s)] = 49
      store = nothing
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  Routine instrA
    TextComponent iAt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        When the screen shows: "Get ready!"

        Place your LEFT finger on the LEFT GREEN KEY.
        Place your RIGHT finger on the RIGHT GREEN KEY.

        When the screen shows: "Start pressing!"

        press AS FAST AS POSSIBLE ALTERNATING
        your LEFT AND RIGHT INDEX FINGERS.
    TextComponent iAc
      color = Chartreuse
      letterHeight = 0.1
      startVal [time (s)] = 5
      wrapWidth = 40
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      text:
        << press any GREEN KEY to continue >>
    KeyboardComponent iAk
      allowedKeys = 'lshift','rshift'
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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  Routine Alternating
    KeyboardComponent Ak
      allowedKeys = 'lshift','rshift'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = all keys
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    TextComponent At
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Press AS FAST POSSIBLE ALTERNATING

        your LEFT and RIGHT index fingers
  Routine Done
    TextComponent Complete
      color = Chartreuse
      letterHeight = 0.20
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Done!
      wrapWidth = 40
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Flow
  Routine i01
  Routine i02
  Routine i03
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine InstrL
    Routine Ready
    Routine Left
    Routine Done
    Routine InstrR
    Routine Ready
    Routine Right
    Routine Done
    Routine InstrB
    Routine Ready
    Routine Both
    Routine Done
    Routine instrA
    Routine Ready
    Routine Alternating
    Routine Done
  LoopTerminator trials
